PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Data filename = u'data/%s_%s' % (expName, expInfo['participant'])
  Experiment info = {'participant': '', 'experimenter': '', 'task': 'P', 'condition': 'C'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  color = 1.0000, 1.0000, 1.0000
  expName = Choose 34
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent imports
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import csv
    CodeComponent gen_practice
      Code Type = Py
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      Before Experiment:
        trainPath = "./assets/training/"
        testPath = "./assets/testing/"
        expFilesPath = "./experimentFiles/"
        stimsFieldNames = ["Left_Stim", "Right_Stim"]

        with open(expFilesPath + "practice.csv", "w") as file:

            practicePair = random.choice(os.listdir(trainPath))
            imgs = os.listdir(trainPath + practicePair)
            writer = csv.DictWriter(file, fieldnames=stimsFieldNames,
                    lineterminator="\n", quoting=csv.QUOTE_MINIMAL)
            writer.writeheader()
            writer.writerow({"Left_Stim": imgs[0], "Right_Stim": imgs[1]})
            writer.writerow({"Left_Stim": imgs[1], "Right_Stim": imgs[0]})
  Routine practice_choose
    ImageComponent leftStim
      image [set every repeat] = $(trainPath + practicePair + "/" + Left_Stim)
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    ImageComponent rightStim
      image [set every repeat] = $(trainPath + practicePair + "/" + Right_Stim)
      pos = (0.25, 0)
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_reveal
    ImageComponent practiceLeftStimReveal
      image [set every repeat] = $(trainPath + practicePair + "/" + Left_Stim)
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent practiceRightStimReveal
      image [set every repeat] = $(trainPath + practicePair + "/" + Right_Stim)
      pos [set every frame] = [0.25, min(0.1, frameN/100)]
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent practiceSmiley
      image = assets/smiley.png
      pos = (0.25, 0)
      size = (0.0625, 0.0625)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine setup
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = experimentFiles/practice.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('Left_Stim', 's10c8.png'), ('Right_Stim', 's10c98.png')]),
      OrderedDict([('Left_Stim', 's10c98.png'), ('Right_Stim', 's10c8.png')])]
    Routine practice_choose
    Routine practice_reveal
  LoopTerminator practice_loop
